CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage)

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:.*\s(?P<RNAi>[A-Z]..).*_(?P<Antibody>K36me[1-3])_.*
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:H3K36me
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Antibody
    Metadata category:RNAi

IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MaskImage:[module_num:6|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
    Select the input image:H3K36me
    Name the output image:H3K36me Mask
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MeasureObjectIntensity:[module_num:7|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notes:['Measuring intensity of Msl2/JASPer and Msl3 staining within each nuclei ']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
    Select images to measure:DAPI, H3K36me Mask
    Select objects to measure:Nuclei

ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/Study/Data/CellProfiler/230324_HModQuant_1/output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Nuclei|Intensity_MeanIntensity_DAPI,Nuclei|Intensity_MeanIntensity_H3K36me Mask,Experiment|Metadata_GroupingTags
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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